# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: IPSVectorMagnet

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: IPSVectorMagnet


[Model and options]
# The option section allow instruments with different options to use the same driver
check_option: false
option_str_1: Custom Bx magnet power supply
option_str_2: Custom By magnet power supply
option_str_3: Custom Bz magnet power supply

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

term_char: LF

baud_rate: 9600

data_bits: 8

stop_bits: 1

tcpip_specify_port: True

tcpip_port: 33576

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Final commands sent to the instrument when closing the driver
final:


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
# =============================================================================
# --- Custom power supplies parameters ----------------------------------------
# =============================================================================

[Power supply X axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Model]
datatype: COMBO
combo_def_1: Keithley 2450
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply X axis: Driver running]
datatype: BOOLEAN
permission: READ
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom Bx magnet power supply

[Power supply Y axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Model]
datatype: COMBO
combo_def_1: Keithley 2450
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Y axis: Driver running]
datatype: BOOLEAN
permission: READ
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom By magnet power supply

[Power supply Z axis: VISA address]
datatype: STRING
set_cmd:
get_cmd:
def_value:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Model]
datatype: COMBO
combo_def_1: Keithley 2450
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Conversion factor (T->native)]
datatype: DOUBLE
set_cmd:
get_cmd:
group: Power supplies
option_value_1: Custom Bz magnet power supply

[Power supply Z axis: Driver running]
datatype: BOOLEAN
permission: READ
get_cmd:
def_value: False
group: Power supplies
option_value_1: Custom Bz magnet power supply

# =============================================================================
# --- Coil constraints --------------------------------------------------------
# =============================================================================

[Max field]
datatype: DOUBLE
unit: T
def_value: 1.5
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: X]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: Y]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

[Max rate: Z]
datatype: DOUBLE
unit: T/min
def_value: 0.05
get_cmd:
set_cmd:
group: Coil parameters

# =============================================================================
# --- Field values ------------------------------------------------------------
# =============================================================================

[Specification mode]
datatype: COMBO
combo_def_1: XYZ
combo_def_2: Cylindrical
combo_def_3: Spherical
set_cmd:
get_cmd:

[Ramping mode]
datatype: COMBO
combo_def_1: Fast between point
combo_def_2: Linear at other parameters constant
set_cmd:
get_cmd:

[Field X]
datatype: DOUBLE
unit: T
get_cmd:
sweep_cmd:
sweep_rate: 50e-3
sweep_minute: True
state_quant: Specification mode
state_value_1: XYZ

[Field Y]
datatype: DOUBLE
unit: T
get_cmd:
sweep_cmd:
sweep_rate: 50e-3
sweep_minute: True
state_quant: Specification mode
state_value_1: XYZ

[Field Z]
datatype: DOUBLE
unit: T
get_cmd:
sweep_cmd:
sweep_rate: 50e-3
sweep_minute: True
state_quant: Specification mode
state_value_1: XYZ
state_value_2: Cylindrical

[Field magnitude]
datatype: DOUBLE
unit: T
get_cmd:
sweep_cmd:
sweep_rate: 50e-3
sweep_minute: True
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical

[Theta]
datatype: DOUBLE
unit: deg
get_cmd:
sweep_cmd:
sweep_rate: 1
sweep_minute: True
state_quant: Specification mode
state_value_1: Spherical

[Phi]
datatype: DOUBLE
unit: deg
get_cmd:
sweep_cmd:
sweep_rate: 1
sweep_minute: True
state_quant: Specification mode
state_value_1: Spherical
state_value_2: Cylindrical


# =============================================================================
# --- Hardware values ---------------------------------------------------------
# =============================================================================

[X Coil field]
datatype: DOUBLE
permission: READ
unit: T
get_cmd:

[Y Coil field]
datatype: DOUBLE
permission: READ
unit: T
get_cmd:

[Z Coil field]
datatype: DOUBLE
permission: READ
unit: T
get_cmd:


# =============================================================================
# --- Reference frame ---------------------------------------------------------
# =============================================================================

[Reference specification mode]
datatype: COMBO
combo_def_1: XYZ
combo_def_2: Spherical
combo_def_3: Plane (normal X)
combo_def_4: Plane (normal Y)
combo_def_5: Plane (normal Z)
set_cmd:
get_cmd:
group: Reference frame

[Direction x]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: XYZ
group: Reference frame

[Direction y]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: XYZ
group: Reference frame

[Direction z]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: XYZ
group: Reference frame

[Direction theta]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Spherical
group: Reference frame

[Direction phi]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Spherical
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# x axis (counted positive from the magnet plane to the sample plane)
[Direction ZXangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal X)
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# y axis (counted positive from the magnet plane to the sample plane)
[Direction YXangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal X)
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# x axis (counted positive from the magnet plane to the sample plane)
[Direction XYangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal Y)
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# y axis (counted positive from the magnet plane to the sample plane)
[Direction ZYangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal Y)
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# x axis (counted positive from the magnet plane to the sample plane)
[Direction XZangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal Z)
group: Reference frame

# Angle between the magnet plane and the sample plane measured along the magnet
# y axis (counted positive from the magnet plane to the sample plane)
[Direction YZangle]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
state_quant: Reference specification mode
state_value_1: Plane (normal Z)
group: Reference frame

# Angle between the magnet x axis and the sample x axis counted positively from
# magnet to sample.
[Theta offset]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
group: Reference frame

[Phi offset]
datatype: DOUBLE
unit: deg
get_cmd:
set_cmd:
group: Reference frame

[Bz offset]
datatype: DOUBLE
unit: T
get_cmd:
set_cmd:
group: Reference frame
