[General settings]
name = QDevil DAC
version = 0.1
driver_path = QDevilQDAC

[Model and options]
check_model = False

[Output1.Voltage]
datatype = DOUBLE
unit = V
group = Output1
sweep_cmd = ***REPEAT SET***

[Output1.VoltageRange]
datatype = COMBO
combo_def_1 = 10V
cmd_def_1 = 10
combo_def_2 = 1V
cmd_def_2 = 1
group = Output1

[Output1.MeasuredCurrent]
datatype = DOUBLE
unit = A
permission = READ
group = Output1

[Output2.Voltage]
datatype = DOUBLE
unit = V
group = Output2
sweep_cmd = ***REPEAT SET***

[Output2.VoltageRange]
datatype = COMBO
combo_def_1 = 10V
cmd_def_1 = 10
combo_def_2 = 1V
cmd_def_2 = 1
group = Output2

[Output2.MeasuredCurrent]
datatype = DOUBLE
unit = A
permission = READ
group = Output2

[Output3.Voltage]
datatype = DOUBLE
unit = V
group = Output3
sweep_cmd = ***REPEAT SET***

[Output3.VoltageRange]
datatype = COMBO
combo_def_1 = 10V
cmd_def_1 = 10
combo_def_2 = 1V
cmd_def_2 = 1
group = Output3

[Output3.MeasuredCurrent]
datatype = DOUBLE
unit = A
permission = READ
group = Output3

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

