# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SignalCore_SC5521A

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SignalCore_SC5521A

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 10.0

[Amplitude]
datatype: DOUBLE
unit: dBm
def_value: 1.0

[Output]
datatype: BOOLEAN
def_value: False
