# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SignalHound SpectrumAnalyzer [shabani]

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SignalHound_SpectrumAnalyzer
use_32bit_mode: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true: ON
#str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: SA124B

# Check instrument model id at startup (True or False). Default is False
check_model: False

# If check_model is set to True, define command for getting the model (default is *IDN?)
#model_cmd: *IDN?

# Valid model strings returned by the instrument. Default value = model_str


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
[Center frequency]
datatype: DOUBLE
def_value: 8E9
unit: Hz

[Span]
datatype: DOUBLE
def_value: 1e6
unit: Hz

[Bandwidth]
datatype: DOUBLE
def_value: 10E3
unit: Hz

[Input Power Level]
datatype: DOUBLE
def_value: -10
unit: dBm

[Signal]
x_name: Frequency
name: Signal
x_unit: Hz
unit: dBm
datatype: VECTOR
permission: READ

[Signal - Zero span]
datatype: DOUBLE
permission: READ





