# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: VICurveTracer-2DMM

# The version string should be updated whenever changes are made to this config file
version: 0.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: VICurveTracer_2DMM


[Model and options]
# The option section allow instruments with different options to use the same driver
check_option: false

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
# =============================================================================
# --- Instrument parameters ---------------------------------------------------
# =============================================================================

[Source: Model]
datatype: COMBO
# Combo value NAME should match one of the file found in this folder.
combo_def_1: YokogawaGS200
group: Instruments

[Source: VISA address]
datatype: STRING
def_value:
group: Instruments

[DMMs: Model]
datatype: COMBO
# Combo value NAME should match one of the file found in this folder.
combo_def_1: Keithley2000
group: Instruments

[DMM: VISA address]
datatype: STRING
def_value:
group: Instruments

[DMM_1: VISA address]
datatype: STRING
def_value:
group: Instruments


# =============================================================================
# --- Parameters --------------------------------------------------------------
# =============================================================================

[Source: list ranges]
datatype: STRING
permission: READ

[Source: range]
datatype: DOUBLE
unit: V

[Source: extrema]
datatype: DOUBLE
unit: V
def_value: 1

[Source: reset rate]
datatype: DOUBLE
unit: V/s
def_value: 10

[Source: load resistance]
datatype: DOUBLE
unit: Ohm
def_value: 1e6

[DMMs: effective rate factor]
datatype: DOUBLE
low_lim: 0
def_value: 1

[DMMs: delay]
datatype: DOUBLE
low_lim: 0
def_value: 0.01

[DMM: list ranges]
datatype: STRING
permission: READ

[DMM: range]
datatype: DOUBLE
unit: V

[DMMs: number of points]
datatype: DOUBLE
low_lim: 3
def_value: 201

[DMMs: list acquisition rates]
datatype: STRING
permission: READ

[DMMs: acquisition rate]
datatype: DOUBLE
unit: points/s

[DMM_1: list ranges]
datatype: STRING
permission: READ

[DMM_1: range]
datatype: DOUBLE
unit: V

[VI curve]
x_name: Bias current
x_unit: A
datatype: VECTOR
permission: READ

[VI curve - 2]
x_name: Bias current
x_unit: A
datatype: VECTOR
permission: READ
