# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: VICurveTracer

# The version string should be updated whenever changes are made to this config file
version: 0.3

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: VICurveTracer


[Model and options]
# The option section allow instruments with different options to use the same driver
check_option: false

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
# =============================================================================
# --- Instrument parameters ---------------------------------------------------
# =============================================================================

[Source: Model]
datatype: COMBO
# Combo value NAME should match one of the file found in this folder.
combo_def_1: YokogawaGS200
combo_def_2: Keithley2450
group: Instruments

[Source: VISA address]
datatype: STRING
def_value:
group: Instruments

[DMM: Model]
datatype: COMBO
# Combo value NAME should match one of the file found in this folder.
combo_def_1: Keithley6500
#combo_def_2: Keithley2000
group: Instruments

[DMM: VISA address]
datatype: STRING
def_value:
group: Instruments

[Lock-In: Model]
datatype: COMBO
# Combo value NAME should match one of the file found in this folder.
combo_def_1: SRS860
group: Instruments

[Lock-In: VISA address]
datatype: STRING
def_value:
group: Instruments


# =============================================================================
# --- Parameters --------------------------------------------------------------
# =============================================================================

[Acquisition mode]
datatype: COMBO
combo_def_1: Continuous
combo_def_2: Point by point (without Lock-in)
combo_def_3: Point by point (with Lock-in)
tooltip: When running with the Lock-in the averaging time on the DMM is set based on the Lock in time constant.

[Acquisition order]
datatype: COMBO
combo_def_1: increasing
combo_def_2: decreasing
combo_def_3: inside-out
combo_def_4: outside-in
def_value: increasing
tooltip: Order in which the points are acquired.  "increasing"=increasing bias (i.e. -ve to +ve), "decreasing"=decreasing bias (+ve to -ve), "inside-out"=0 bias to +/-, "outside-in"=+/- bias to 0.
state_quant: Acquisition mode
state_value_1: Point by point (without Lock-in)
state_value_2: Point by point (with Lock-in)

[Source: extrema]
datatype: DOUBLE
unit: V
def_value: 1

[Source: reset rate]
datatype: DOUBLE
unit: V/s
def_value: 10

[Source: load resistance]
datatype: DOUBLE
unit: Ohm
def_value: 1e6

[DMM: auto-range]
datatype: BOOLEAN
def_value: False

[DMM: range]
datatype: DOUBLE
unit: V
high_lim: 1000
low_lim: -1000
state_quant: DMM: auto-range
state_value_1: False

[DMM: number of points]
datatype: DOUBLE
low_lim: 3
def_value: 201

[DMM: list acquisition rates]
datatype: STRING
permission: READ
state_quant: Acquisition mode
state_value_1: Continuous

[DMM: acquisition rate]
datatype: DOUBLE
unit: points/s
state_quant: Acquisition mode
state_value_1: Continuous

[DMM: NPLC]
datatype: DOUBLE
def_value: 1
high_lim: 15
low_lim: 0.0005
tooltip: Number of power-line cycles.  The Keithley6500 is optimized for 1-5 PLC.

[DMM: Filter]
datatype: BOOLEAN
def_value: True

[DMM: Filter type]
datatype: COMBO
def_value: REPEAT
combo_def_1: REPEAT
combo_def_2: MOVING
state_quant: DMM: Filter
state_value_1: True
tooltip: Repeating average is slower but more stable than moving average.

[DMM: Filter count]
datatype: DOUBLE
def_value: 1
high_lim: 100
low_lim: 1
state_quant: DMM: Filter
state_value_1: True
tooltip: The number of measurements that are averaged when filtering is enabled.

[Lock-in: amplitude]
datatype: DOUBLE
unit: V
def_value: 10e-3
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)

[Lock-in: frequency]
datatype: DOUBLE
unit: Hz
def_value: 217.7777
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)

[Lock-in: list time constants]
datatype: STRING
permission: READ
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)

[Lock-in: time constant]
datatype: DOUBLE
unit: s
def_value: 100e-3
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)

[Lock-in: settling time]
datatype: DOUBLE
unit: Tc
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)
permission: READ
tooltip: Determined by DMM's NPLC and filter count.  Should be at least 3*(time constant).

[Lock-in: load resistance]
datatype: DOUBLE
unit: Ohm
def_value: 1e6
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)

[VI curve]
x_name: Bias current
x_unit: A
datatype: VECTOR
permission: READ

[dR vs I curve]
x_name: Bias current
x_unit: A
datatype: VECTOR_COMPLEX
permission: READ
state_quant: Acquisition mode
state_value_1: Point by point (with Lock-in)
tooltip: The VI Curve should be acquired first !
