# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Yokogawa GS200 DC Source

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Yokogawa_GS200

# Support for hardware triggering
support_arm: True

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: GS210

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: GS210

# Installed options (shown as checkbox controls)
option_str_1: Voltage and current monitoring

# Check instrument options at startup (True or False). Default is False
check_options: True

# If check_options is set to True, define command for getting options
option_cmd: *OPT?

# If check_options is set to True, supply valid id option strings for each option
option_id_1: MON

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# If using ethernet, this instrument only works through a specific port
tcpip_specify_port = True
tcpip_port = 7655
term_char = CR+LF

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: STAT:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *CLS

# Final commands sent to the instrument when closing the driver
final: :SYST:LOC


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
[Function]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: VOLT
cmd_def_2: CURR
set_cmd: :SOUR:FUNC

[Range (V)]
datatype: COMBO
def_value: 10 V
combo_def_1: 30 V
combo_def_2: 10 V
combo_def_3: 1 V
combo_def_4: 100 mV
combo_def_5: 10 mV
cmd_def_1: 30E+0
cmd_def_2: 10E+0
cmd_def_3: 1E+0
cmd_def_4: 100E-3
cmd_def_5: 10E-3
set_cmd: :SOUR:RANG
state_quant: Function
state_value_1: Voltage

[Range (I)]
datatype: COMBO
def_value: 1 mA
combo_def_1: 200 mA
combo_def_2: 100 mA
combo_def_3: 10 mA
combo_def_4: 1 mA
cmd_def_1: 200E-3
cmd_def_2: 100E-3
cmd_def_3: 10E-3
cmd_def_4: 1E-3
set_cmd: :SOUR:RANG
state_quant: Function
state_value_1: Current

[Output]
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP

[Voltage]
datatype: DOUBLE
unit: V
low_lim: -32
high_lim: 32
set_cmd: :SOUR:LEV
sweep_cmd: <python>
stop_cmd: :PROG:HOLD
state_quant: Function
state_value_1: Voltage

[Current]
datatype: DOUBLE
unit: A
low_lim: -0.2
high_lim: 0.2
set_cmd: :SOUR:LEV
sweep_cmd: <python>
stop_cmd: :PROG:HOLD
state_quant: Function
state_value_1: Current

[Start Program]
datatype: BUTTON
permission: write
set_cmd: PROG:RUN?

[Measurement]
datatype: BOOLEAN
tooltip: Turn measurement on
show_in_measurement_dlg: False
def_value: False
permission: BOTH
group: Measurement
set_cmd: SENS <*>
get_cmd: SENS?
option_value_1: Voltage and current monitoring

[Measurement NPLC]
datatype: DOUBLE
tooltip: Measurement speed in number of powerline cycles
def_value: 1
low_lim: 1
high_lim: 25
permission: BOTH
set_cmd: SENS:NPLC <*>
get_cmd: SENS:NPLC?
group: Measurement
show_in_measurement_dlg: False
state_quant: Measurement
state_value_1: True
option_value_1: Voltage and current monitoring

[Measurement Value]
datatype: DOUBLE
label: Measured value
permission: READ
get_cmd: READ?
group: Measurement
show_in_measurement_dlg: True
state_quant: Measurement
state_value_1: True
option_value_1: Voltage and current monitoring
